CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:421
GitHash:
ModuleCount:49
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Patient>.*)_(?P<Core>.*)_(?P<AB>.*)_(?P<ABname>.*)
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Match metadata:[{'SMPD1': 'Patient', 'CD8': 'Patient', 'HE': 'Patient', 'CERS2': 'Patient', 'CERS1': 'Patient', 'CD206': 'Patient', 'PHH3': 'Patient', 'CD68': 'Patient', 'CK19': 'Patient', 'CD3': 'Patient', 'CD45': 'Patient', 'SR': 'Patient'}, {'SMPD1': 'Core', 'CD8': 'Core', 'HE': 'Core', 'CERS2': 'Core', 'CERS1': 'Core', 'CD206': 'Core', 'PHH3': 'Core', 'CD68': 'Core', 'CK19': 'Core', 'CD3': 'Core', 'CD45': 'Core', 'SR': 'Core'}]
    Image set matching method:Metadata
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    Assignments count:12
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "HE")
    Name to assign these images:HE
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    Select the image type:Color image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "SMPD1")
    Name to assign these images:SMPD1
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    Select the image type:Color image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "CD8")
    Name to assign these images:CD8
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    Select the image type:Color image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "CERS2")
    Name to assign these images:CERS2
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    Select the image type:Color image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "CERS1")
    Name to assign these images:CERS1
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    Select the image type:Color image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "CD206")
    Name to assign these images:CD206
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    Select the image type:Color image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "PHH3")
    Name to assign these images:PHH3
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    Select the image type:Color image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "CD68")
    Name to assign these images:CD68
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    Select the image type:Color image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "CK19")
    Name to assign these images:CK19
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    Select the image type:Color image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "CD3")
    Name to assign these images:CD3
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    Select the image type:Color image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "CD45")
    Name to assign these images:CD45
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    Select the image type:Color image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "SR")
    Name to assign these images:SR
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    Select the image type:Color image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
UnmixColors:[module_num:5|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
    Stain count:2
    Select the input color image:HE
    Name the output image:unmix_nuclei
    Stain:Hematoxylin
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    Name the output image:unmix_eosin
    Stain:Eosin
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
IdentifyPrimaryObjects:[module_num:6|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
    Select the input image:unmix_nuclei
    Name the primary objects to be identified:NucleiObjects
    Typical diameter of objects, in pixel units (Min,Max):6,30
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.10
    Threshold correction factor:1.4
    Lower and upper bounds on threshold:0.2, 1
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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    Size of adaptive window:30
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    Thresholding method:Otsu

ConvertObjectsToImage:[module_num:7|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
    Select the input objects:NucleiObjects
    Name the output image:multiplex_nuclei
    Select the color format:Color
    Select the colormap:Spectral_r

SaveImages:[module_num:8|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
    Select the type of image to save:Image
    Select the image to save:multiplex_nuclei
    Select method for constructing file names:Single name
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    Enter single file name:\g<Patient>_\g<Core>_nuclei_masks
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    Saved file format:tiff
    Output file location:Elsewhere...|/Volumes/Multiplexing_G_Drive/Multiplexing/multiplexing/TMA_Ahmed_new/Analysis/10_image_cytometry_output/1_images/multiplex
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

IdentifySecondaryObjects:[module_num:9|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
    Select the input objects:NucleiObjects
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Watershed - Image
    Select the input image:unmix_eosin
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    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.1
    Threshold correction factor:0.9
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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    Size of adaptive window:100
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    Thresholding method:Otsu

ConvertObjectsToImage:[module_num:10|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
    Select the input objects:Cells
    Name the output image:multiplex_cytoplasm
    Select the color format:Color
    Select the colormap:Spectral_r

SaveImages:[module_num:11|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
    Select the type of image to save:Image
    Select the image to save:multiplex_cytoplasm
    Select method for constructing file names:Single name
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    Enter single file name:\g<Patient>_\g<Core>_cytoplasm_masks
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    Saved file format:tiff
    Output file location:Elsewhere...|/Volumes/Multiplexing_G_Drive/Multiplexing/multiplexing/TMA_Ahmed_new/Analysis/10_image_cytometry_output/1_images/multiplex
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

IdentifyTertiaryObjects:[module_num:12|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
    Select the larger identified objects:Cells
    Select the smaller identified objects:NucleiObjects
    Name the tertiary objects to be identified:Cytoplasm
    Shrink smaller object prior to subtraction?:Yes

ConvertObjectsToImage:[module_num:13|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
    Select the input objects:Cells
    Name the output image:multiplex
    Select the color format:Color
    Select the colormap:Spectral_r

SaveImages:[module_num:14|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
    Select the type of image to save:Image
    Select the image to save:multiplex
    Select method for constructing file names:Single name
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    Enter single file name:\g<Patient>_\g<Core>_cell_masks
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    Saved file format:tiff
    Output file location:Elsewhere...|/Volumes/Multiplexing_G_Drive/Multiplexing/multiplexing/TMA_Ahmed_new/Analysis/10_image_cytometry_output/1_images/multiplex
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

UnmixColors:[module_num:15|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
    Stain count:2
    Select the input color image:SMPD1
    Name the output image:unmix_Smpd1
    Stain:AEC
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    Name the output image:Hematoxylin
    Stain:Custom
    Red absorbance:0.79
    Green absorbance:0.71
    Blue absorbance:0.73

UnmixColors:[module_num:16|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
    Stain count:2
    Select the input color image:CD8
    Name the output image:unmix_CD8
    Stain:AEC
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    Name the output image:Hematoxylin
    Stain:Custom
    Red absorbance:0.79
    Green absorbance:0.71
    Blue absorbance:0.73

UnmixColors:[module_num:17|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
    Stain count:2
    Select the input color image:CERS2
    Name the output image:unmix_CERS2
    Stain:AEC
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    Name the output image:Hematoxylin
    Stain:Custom
    Red absorbance:0.61
    Green absorbance:0.6
    Blue absorbance:0.63

UnmixColors:[module_num:18|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
    Stain count:2
    Select the input color image:CERS1
    Name the output image:unmix_CERS1
    Stain:AEC
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    Name the output image:Hematoxylin
    Stain:Custom
    Red absorbance:0.85
    Green absorbance:0.77
    Blue absorbance:0.76

UnmixColors:[module_num:19|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
    Stain count:2
    Select the input color image:CD206
    Name the output image:unmix_CD206
    Stain:AEC
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    Name the output image:Hematoxylin
    Stain:Custom
    Red absorbance:0.66
    Green absorbance:0.61
    Blue absorbance:0.7

ImageMath:[module_num:20|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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:ImageAfterMath_CD206
    Image or measurement?:Image
    Select the first image:unmix_CD206
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:unmix_CERS2
    Multiply the second image by:1.0
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
UnmixColors:[module_num:21|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
    Stain count:2
    Select the input color image:PHH3
    Name the output image:unmix_PHH3
    Stain:AEC
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    Name the output image:Hematoxylin
    Stain:Custom
    Red absorbance:0.745
    Green absorbance:0.686
    Blue absorbance:0.71

ImageMath:[module_num:22|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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:ImageAfterMath_PHH3
    Image or measurement?:Image
    Select the first image:unmix_PHH3
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:unmix_CERS1
    Multiply the second image by:1.0
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
UnmixColors:[module_num:23|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
    Stain count:2
    Select the input color image:CD68
    Name the output image:unmix_CD68
    Stain:AEC
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    Name the output image:Hematoxylin
    Stain:Custom
    Red absorbance:0.72
    Green absorbance:0.694
    Blue absorbance:0.77

UnmixColors:[module_num:24|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
    Stain count:2
    Select the input color image:CK19
    Name the output image:unmix_CK19
    Stain:Fast red
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    Name the output image:Hematoxylin
    Stain:Custom
    Red absorbance:0.764
    Green absorbance:0.7
    Blue absorbance:0.689

UnmixColors:[module_num:25|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
    Stain count:2
    Select the input color image:CD3
    Name the output image:unmix_CD3
    Stain:AEC
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    Name the output image:Hematoxylin
    Stain:Custom
    Red absorbance:0.67
    Green absorbance:0.6
    Blue absorbance:0.62

ImageMath:[module_num:26|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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:ImageAfterMath_CD3
    Image or measurement?:Image
    Select the first image:unmix_CD3
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:unmix_CK19
    Multiply the second image by:1.0
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
UnmixColors:[module_num:27|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
    Stain count:2
    Select the input color image:CD45
    Name the output image:unmix_CD45
    Stain:AEC
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    Name the output image:Hematoxylin
    Stain:Custom
    Red absorbance:0.686
    Green absorbance:0.635
    Blue absorbance:0.66

ImageMath:[module_num:28|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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:ImageAfterMath_CD45
    Image or measurement?:Image
    Select the first image:unmix_CD45
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:unmix_CK19
    Multiply the second image by:1.0
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
MeasureObjectIntensity:[module_num:29|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
    Select images to measure:ImageAfterMath_CD206, ImageAfterMath_CD3, ImageAfterMath_CD45, ImageAfterMath_PHH3, unmix_CD68, unmix_CD8, unmix_CERS1, unmix_CERS2, unmix_CK19, unmix_Smpd1, unmix_eosin, unmix_nuclei
    Select objects to measure:Cells, Cytoplasm, NucleiObjects

MeasureObjectSizeShape:[module_num:30|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
    Select object sets to measure:Cells, Cytoplasm, NucleiObjects
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:Yes

ColorToGray:[module_num:31|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
    Select the input image:SR
    Conversion method:Combine
    Image type:RGB
    Name the output image:OrigGray
    Relative weight of the red channel:1.0
    Relative weight of the green channel:1.0
    Relative weight of the blue channel:1.0
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
ImageMath:[module_num:32|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
    Operation:Invert
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:SR_ImageAfterMath
    Image or measurement?:Image
    Select the first image:OrigGray
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
ImageMath:[module_num:33|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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:SR_ImageAfterMath2
    Image or measurement?:Image
    Select the first image:SR_ImageAfterMath
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:unmix_CK19
    Multiply the second image by:1.0
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
ImageMath:[module_num:34|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
    Operation:Invert
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:SR_ImageAfterMath3
    Image or measurement?:Image
    Select the first image:SR_ImageAfterMath2
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
Threshold:[module_num:35|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
    Select the input image:SR_ImageAfterMath3
    Name the output image:SR_Threshold
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:Yes
    Assign pixels in the middle intensity class to the foreground or the background?:Background
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
MaskImage:[module_num:36|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
    Select the input image:SR
    Name the output image:Maskcolor
    Use objects or an image as a mask?:Image
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    Select image for mask:SR_Threshold
    Invert the mask?:Yes

ColorToGray:[module_num:37|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
    Select the input image:Maskcolor
    Conversion method:Split
    Image type:RGB
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    Convert red to gray?:Yes
    Name the output image:SRred
    Convert green to gray?:Yes
    Name the output image:FGgreen
    Convert blue to gray?:Yes
    Name the output image:OrigBlueSRblue
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
ImageMath:[module_num:38|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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:Yes
    Name the output image:SR_ImageAfterMath4
    Image or measurement?:Image
    Select the first image:Maskcolor
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:FGgreen
    Multiply the second image by:1.0
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
ColorToGray:[module_num:39|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
    Select the input image:SR_ImageAfterMath4
    Conversion method:Split
    Image type:RGB
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    Convert red to gray?:Yes
    Name the output image:SRred2
    Convert green to gray?:No
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    Convert blue to gray?:No
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
UnmixColors:[module_num:40|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
    Stain count:1
    Select the input color image:SR_ImageAfterMath4
    Name the output image:SR_unmix
    Stain:Custom
    Red absorbance:1
    Green absorbance:0
    Blue absorbance:0

ImageMath:[module_num:41|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
    Operation:Invert
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:SR_unmix2
    Image or measurement?:Image
    Select the first image:SR_unmix
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
MeasureImageIntensity:[module_num:42|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
    Select images to measure:SRred2
    Measure the intensity only from areas enclosed by objects?:No
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    Calculate custom percentiles:No
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
EnhanceOrSuppressFeatures:[module_num:43|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
    Select the input image:SRred2
    Name the output image:SR_EnhanceOrSuppressFeatures
    Select the operation:Enhance
    Feature size:10
    Feature type:Neurites
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    Smoothing scale:2.0
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    Enhancement method:Line structures
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    Rescale result image:Yes

IdentifyPrimaryObjects:[module_num:44|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
    Select the input image:SR_EnhanceOrSuppressFeatures
    Name the primary objects to be identified:SR_IdentifyPrimaryObjects
    Typical diameter of objects, in pixel units (Min,Max):1,400
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:50
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    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:Never
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.5
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.05,1.0
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    Log transform before thresholding?:No
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
OverlayOutlines:[module_num:45|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Maskcolor
    Name the output image:SR_OrigOverlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:red
    Select objects to display:SR_IdentifyPrimaryObjects

MeasureImageAreaOccupied:[module_num:46|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
    Measure the area occupied by:Objects
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    Select object sets to measure:SR_IdentifyPrimaryObjects

SaveImages:[module_num:47|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
    Select the type of image to save:Image
    Select the image to save:SR_OrigOverlay
    Select method for constructing file names:Single name
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    Enter single file name:\g<Patient>_\g<Core>_SROverlay
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    Saved file format:jpeg
    Output file location:Elsewhere...|/Volumes/Multiplexing_G_Drive/Multiplexing/multiplexing/TMA_Ahmed_new/Analysis/10_image_cytometry_output/1_images/ImageAfterMath
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:Yes
    Base image folder:Default Output Folder|
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    Save with lossless compression?:No

ExportToSpreadsheet:[module_num:48|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Elsewhere...|/Volumes/Multiplexing_G_Drive/Multiplexing/multiplexing/TMA_Ahmed_new/Analysis/10_image_cytometry_output/4_analysis
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:Cells|Location_CenterMassIntensity_Y_unmix_CERS2,Cells|Location_CenterMassIntensity_Y_unmix_CERS1,Cells|Location_CenterMassIntensity_Y_unmix_CD8,Cells|Location_CenterMassIntensity_Y_unmix_eosin,Cells|Location_CenterMassIntensity_Y_unmix_Smpd1,Cells|Location_CenterMassIntensity_Y_unmix_nuclei,Cells|Location_CenterMassIntensity_Y_unmix_CD68,Cells|Location_CenterMassIntensity_Y_unmix_CK19,Cells|Location_CenterMassIntensity_Y_ImageAfterMath_CD3,Cells|Location_CenterMassIntensity_Y_ImageAfterMath_PHH3,Cells|Location_CenterMassIntensity_Y_ImageAfterMath_CD45,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:multiplex
    Overwrite existing files without warning?:No
    Data to export:Cells
    Combine these object measurements with those of the previous object?:No
    File name:Cells_\g<Patient>_\g<Core>.csv
    Use the object name for the file name?:No
    Data to export:Experiment
    Combine these object measurements with those of the previous object?:No
    File name:experiments_\g<Patient>_\g<Core>.csv
    Use the object name for the file name?:No
    Data to export:Object relationships
    Combine these object measurements with those of the previous object?:No
    File name:rel_results_\g<Patient>_\g<Core>.csv
    Use the object name for the file name?:No
    Data to export:Cytoplasm
    Combine these object measurements with those of the previous object?:No
    File name:Cytoplasm_\g<Patient>_\g<Core>.csv
    Use the object name for the file name?:No
    Data to export:NucleiObjects
    Combine these object measurements with those of the previous object?:No
    File name:Nuclei_\g<Patient>_\g<Core>.csv
    Use the object name for the file name?:No

ExportToSpreadsheet:[module_num:49|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:Yes
    Output file location:Elsewhere...|/Volumes/Multiplexing_G_Drive/Multiplexing/multiplexing/TMA_Ahmed_new/Analysis/10_image_cytometry_output/4_analysis/fibrosisImages
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:Image|Intensity_MaxIntensity_SRred2,Image|Intensity_StdIntensity_SRred2,Image|Intensity_TotalIntensity_SRred2,Image|Intensity_MedianIntensity_SRred2,Image|Intensity_PercentMaximal_SRred2,Image|Intensity_UpperQuartileIntensity_SRred2,Image|Intensity_MADIntensity_SRred2,Image|Intensity_MeanIntensity_SRred2,Image|Intensity_MinIntensity_SRred2,Image|Intensity_TotalArea_SRred2,Image|Intensity_LowerQuartileIntensity_SRred2,Image|ModuleError_35Threshold,Image|ModuleError_42MeasureImageIntensity,Image|ModuleError_09IdentifySecondaryObjects,Image|ModuleError_13ConvertObjectsToImage,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:fibrosis_
    Overwrite existing files without warning?:Yes
    Data to export:SR_IdentifyPrimaryObjects
    Combine these object measurements with those of the previous object?:No
    File name:\g<Patient>_\g<Core>.csv
    Use the object name for the file name?:No
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
    File name:image_\g<Patient>_\g<Core>.csv
    Use the object name for the file name?:No
