CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:428
GitHash:
ModuleCount:11
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "ch00_SV.tif")
    Name to assign these images:OrigBlue
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "ch01_SV.tif")
    Name to assign these images:OrigGreen
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "ch02_SV.tif")
    Name to assign these images:OrigRed
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:OrigBlue
    Name the primary objects to be identified:nuclei
    Typical diameter of objects, in pixel units (Min,Max):50,1000
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:0.3
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
IdentifySecondaryObjects:[module_num:6|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
    Select the input objects:nuclei
    Name the objects to be identified:cellsSmpd1
    Select the method to identify the secondary objects:Propagation
    Select the input image:OrigRed
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    Regularization factor:0.5
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:1
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    Manual threshold:0.0000005
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
MeasureImageIntensity:[module_num:7|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
    Select images to measure:OrigGreen, OrigRed
    Measure the intensity only from areas enclosed by objects?:Yes
    Select input object sets:cellsSmpd1
    Calculate custom percentiles:No
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
MeasureObjectIntensity:[module_num:8|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
    Select images to measure:OrigGreen, OrigRed
    Select objects to measure:cellsSmpd1

GrayToColor:[module_num:9|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
    Select a color scheme:RGB
    Rescale intensity:Yes
    Select the image to be colored red:OrigRed
    Select the image to be colored green:OrigGreen
    Select the image to be colored blue:OrigBlue
    Name the output image:ColorImage
    Relative weight for the red image:1.0
    Relative weight for the green image:1.0
    Relative weight for the blue image:1.0
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
SaveImages:[module_num:10|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
    Select the type of image to save:Image
    Select the image to save:ColorImage
    Select method for constructing file names:From image filename
    Select image name for file prefix:OrigRed
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:cobmi
    Saved file format:tiff
    Output file location:Elsewhere...|C:\\research\\munich lab\\EMT qPCR\\Smpd1&cermide IF\\B2 cell profiler  images
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

ExportToSpreadsheet:[module_num:11|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:Yes
    Output file location:Elsewhere...|C:\\research\\munich lab\\EMT qPCR\\Smpd1&cermide IF\\B2 cell profiler  images\\New folder
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:Image|Intensity_LowerQuartileIntensity_OrigRed_cellsSmpd1,Image|Intensity_LowerQuartileIntensity_OrigGreen_cellsSmpd1,Image|Intensity_TotalIntensity_OrigRed_cellsSmpd1,Image|Intensity_TotalIntensity_OrigGreen_cellsSmpd1,Image|Intensity_PercentMaximal_OrigGreen_cellsSmpd1,Image|Intensity_PercentMaximal_OrigRed_cellsSmpd1,Image|Intensity_MeanIntensity_OrigGreen_cellsSmpd1,Image|Intensity_MeanIntensity_OrigRed_cellsSmpd1,Image|Intensity_MedianIntensity_OrigGreen_cellsSmpd1,Image|Intensity_MedianIntensity_OrigRed_cellsSmpd1,Image|Intensity_MaxIntensity_OrigRed_cellsSmpd1,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:No
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