CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:428
GitHash:
ModuleCount:16
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<cell_line>[^_]+)_(?P<treatment>[^_]+)_(?P<replicate>\d+)\.tiff$
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Color image
    Name to assign these images:raw_image
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    Set intensity range from:Image metadata
    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ColorToGray:[module_num:5|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
    Select the input image:raw_image
    Conversion method:Split
    Image type:Channels
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    Channel count:3
    Channel number:1
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    Image name:SM
    Channel number:2
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    Image name:CER
    Channel number:3
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    Image name:DAPI

IdentifyPrimaryObjects:[module_num:6|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notes:['Identify the nuclei from the nuclear stain image. ']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
    Select the input image:DAPI
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):50,300
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.0
    Threshold correction factor:1.1
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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
ExpandOrShrinkObjects:[module_num:7|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
    Select the input objects:Nuclei
    Name the output objects:ExpandNuclei
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:15
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
IdentifyTertiaryObjects:[module_num:8|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
    Select the larger identified objects:ExpandNuclei
    Select the smaller identified objects:Nuclei
    Name the tertiary objects to be identified:PerinuclearArea
    Shrink smaller object prior to subtraction?:No

IdentifyPrimaryObjects:[module_num:9|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
    Select the input image:SM
    Name the primary objects to be identified:PrimaryCells
    Typical diameter of objects, in pixel units (Min,Max):70,400
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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
RelateObjects:[module_num:10|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
    Parent objects:ExpandNuclei
    Child objects:PrimaryCells
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:Cells
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
IdentifyTertiaryObjects:[module_num:11|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
    Select the larger identified objects:Cells
    Select the smaller identified objects:Nuclei
    Name the tertiary objects to be identified:WholeCytoplasm
    Shrink smaller object prior to subtraction?:Yes

ExpandOrShrinkObjects:[module_num:12|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
    Select the input objects:Cells
    Name the output objects:ShrunkenCell
    Select the operation:Shrink objects by a specified number of pixels
    Number of pixels by which to expand or shrink:5
    Fill holes in objects so that all objects shrink to a single point?:No
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
IdentifyTertiaryObjects:[module_num:13|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
    Select the larger identified objects:Cells
    Select the smaller identified objects:ShrunkenCell
    Name the tertiary objects to be identified:CellmembraneArea
    Shrink smaller object prior to subtraction?:Yes

IdentifyTertiaryObjects:[module_num:14|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
    Select the larger identified objects:ShrunkenCell
    Select the smaller identified objects:ExpandNuclei
    Name the tertiary objects to be identified:CytoplasmArea
    Shrink smaller object prior to subtraction?:Yes

MeasureObjectIntensity:[module_num:15|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
    Select images to measure:CER, SM
    Select objects to measure:CellmembraneArea, Cells, CytoplasmArea

ExportToSpreadsheet:[module_num:16|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notes:['Export any measurements to a comma-delimited file (.csv). The measurements made for the nuclei and foci objects will be saved to separate .csv files, in addition to the per-image .csv.']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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:Image|FileName_raw_image,Image|ModuleError_02Metadata,Image|ModuleError_08IdentifyTertiaryObjects,Image|ModuleError_03NamesAndTypes,Image|ModuleError_14IdentifyTertiaryObjects,Image|ModuleError_09IdentifyPrimaryObjects,Image|ModuleError_10RelateObjects,Image|ModuleError_04Groups,Image|ModuleError_01Images,Image|ModuleError_11IdentifyTertiaryObjects,Image|ModuleError_05ColorToGray,Image|ModuleError_07ExpandOrShrinkObjects,Image|ModuleError_06IdentifyPrimaryObjects,Image|ModuleError_15MeasureObjectIntensity,Image|ModuleError_12ExpandOrShrinkObjects,Image|ModuleError_13IdentifyTertiaryObjects,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:Intensity_
    Overwrite existing files without warning?:Yes
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