CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:428
GitHash:
ModuleCount:13
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:Folder name
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    Regular expression to extract from folder name:.*/(?P<CellType>[^_/]+)_(?P<Treatment>[^_/]+)$
    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Match metadata:[{'Actin': 'CellType', 'DNA': 'CellType', 'Paxillin': 'CellType'}, {'Actin': 'Treatment', 'DNA': 'Treatment', 'Paxillin': 'Treatment'}]
    Image set matching method:Metadata
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    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "c1")
    Name to assign these images:DNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "c2")
    Name to assign these images:Actin
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "c3")
    Name to assign these images:Paxillin
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:Yes
    grouping metadata count:2
    Metadata category:CellType
    Metadata category:Treatment

GrayToColor:[module_num:5|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
    Select a color scheme:Composite
    Rescale intensity:Yes
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    Name the output image:CompositeImage
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    Hidden:3
    Image name:DNA
    Color:#0000FF
    Weight:0.00199
    Image name:Paxillin
    Color:#00ff00
    Weight:2.0
    Image name:Actin
    Color:#FB0207
    Weight:2.0

InvertForPrinting:[module_num:6|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
    Input image type:Grayscale
    Use a red image?:Yes
    Select the red image:Actin
    Use a green image?:Yes
    Select the green image:Paxillin
    Use a blue image?:Yes
    Select the blue image:DNA
    Select the color image:CompositeImage
    Output image type:Color
    Select "*Yes*" to produce a red image.:Yes
    Name the red image:InvertedRed
    Select "*Yes*" to produce a green image.:Yes
    Name the green image:InvertedGreen
    Select "*Yes*" to produce a blue image.:Yes
    Name the blue image:InvertedBlue
    Name the inverted color image:InvertedColor

SaveImages:[module_num:7|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
    Select the type of image to save:Image
    Select the image to save:InvertedColor
    Select method for constructing file names:Single name
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    Enter single file name:\g<CellType>_\g<Treatment>_inverted
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    Saved file format:tiff
    Output file location:Default Output Folder|Desktop/CellPaint20x/Composites
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

IdentifyPrimaryObjects:[module_num:8|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
    Select the input image:DNA
    Name the primary objects to be identified:IdentifyPrimaryObjects
    Typical diameter of objects, in pixel units (Min,Max):20,70
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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
IdentifySecondaryObjects:[module_num:9|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
    Select the input objects:IdentifyPrimaryObjects
    Name the objects to be identified:IdentifySecondaryObjects
    Select the method to identify the secondary objects:Propagation
    Select the input image:Actin
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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
MeasureObjectIntensity:[module_num:10|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
    Select images to measure:Actin, Paxillin
    Select objects to measure:IdentifySecondaryObjects

MeasureObjectSizeShape:[module_num:11|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
    Select object sets to measure:IdentifySecondaryObjects
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:Yes

MeasureObjectNeighbors:[module_num:12|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
    Select objects to measure:IdentifySecondaryObjects
    Select neighboring objects to measure:IdentifySecondaryObjects
    Method to determine neighbors:Adjacent
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    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
ExportToSpreadsheet:[module_num:13|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:Yes
    Calculate the per-image standard deviation values for object measurements?:Yes
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:25x_Imaging
    Overwrite existing files without warning?:No
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