CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:428
GitHash:
ModuleCount:23
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<clone>[^_]+)_(?P<replicate>\d+)\.tiff$
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:or (file does contain ".tiff")
    Name to assign these images:LysT
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    Select the image type:Color image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:Yes
    grouping metadata count:1
    Metadata category:clone

ColorToGray:[module_num:5|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
    Select the input image:LysT
    Conversion method:Split
    Image type:RGB
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    Convert red to gray?:Yes
    Name the output image:lysotracker
    Convert green to gray?:No
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    Convert blue to gray?:Yes
    Name the output image:dapi
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
IdentifyPrimaryObjects:[module_num:6|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
    Select the input image:lysotracker
    Name the primary objects to be identified:lysotracterObjects
    Typical diameter of objects, in pixel units (Min,Max):3,150
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.25,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:Yes
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
IdentifyPrimaryObjects:[module_num:7|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
    Select the input image:dapi
    Name the primary objects to be identified:dapiObjects
    Typical diameter of objects, in pixel units (Min,Max):110,500
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.1,1.0
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    Log transform before thresholding?:No
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
ExpandOrShrinkObjects:[module_num:8|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
    Select the input objects:dapiObjects
    Name the output objects:ExpandedNuclei
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:20
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
OverlayOutlines:[module_num:9|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:lysotracker
    Name the output image:outline20pixels
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:#FF0000
    Select objects to display:ExpandedNuclei

SaveImages:[module_num:10|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
    Select the type of image to save:Image
    Select the image to save:outline20pixels
    Select method for constructing file names:From image filename
    Select image name for file prefix:LysT
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_outline20pixels
    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|outline20pixels
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

RelateObjects:[module_num:11|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
    Parent objects:ExpandedNuclei
    Child objects:lysotracterObjects
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:RelateObjects_lysosomes
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
OverlayOutlines:[module_num:12|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:lysotracker
    Name the output image:Perinuclear_lysosomes
    Outline display mode:Color
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    How to outline:Outer
    Select outline color:Red
    Select objects to display:RelateObjects_lysosomes

SaveImages:[module_num:13|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
    Select the type of image to save:Image
    Select the image to save:Perinuclear_lysosomes
    Select method for constructing file names:From image filename
    Select image name for file prefix:LysT
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_Perinuclear_lysosomes
    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|Perinuclear_lysosomes
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

IdentifySecondaryObjects:[module_num:14|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
    Select the input objects:dapiObjects
    Name the objects to be identified:wholecells
    Select the method to identify the secondary objects:Propagation
    Select the input image:lysotracker
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    Regularization factor:0.01
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.05,1.0
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    Log transform before thresholding?:No
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
OverlayOutlines:[module_num:15|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:lysotracker
    Name the output image:Cell_outline
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:Red
    Select objects to display:wholecells

SaveImages:[module_num:16|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
    Select the type of image to save:Image
    Select the image to save:Cell_outline
    Select method for constructing file names:From image filename
    Select image name for file prefix:LysT
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_Cell_outline
    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|Cell_outline
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

MaskObjects:[module_num:17|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
    Select objects to be masked:lysotracterObjects
    Name the masked objects:Nonperinuclear_lysosomes
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:RelateObjects_lysosomes
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

RelateObjects:[module_num:18|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
    Parent objects:wholecells
    Child objects:Nonperinuclear_lysosomes
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:RelateObjects_nonperinuclear_lysosomes
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
OverlayOutlines:[module_num:19|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:lysotracker
    Name the output image:Nonperinuclear_lysosomes
    Outline display mode:Color
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    How to outline:Outer
    Select outline color:Red
    Select objects to display:RelateObjects_nonperinuclear_lysosomes

SaveImages:[module_num:20|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
    Select the type of image to save:Image
    Select the image to save:Nonperinuclear_lysosomes
    Select method for constructing file names:From image filename
    Select image name for file prefix:LysT
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_Nonperinuclear_lysosomes
    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|Nonperinuclear_lysosomes
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

MeasureObjectIntensity:[module_num:21|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
    Select images to measure:lysotracker
    Select objects to measure:RelateObjects_lysosomes, RelateObjects_nonperinuclear_lysosomes, lysotracterObjects

MeasureObjectSizeShape:[module_num:22|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
    Select object sets to measure:RelateObjects_lysosomes, RelateObjects_nonperinuclear_lysosomes, lysotracterObjects
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

ExportToSpreadsheet:[module_num:23|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:LysT_
    Overwrite existing files without warning?:No
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